PsychoPy2experiment version="2020.1.2"
Settings
  Completed URL = html
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = html
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = test
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Routines
  Routine trial
    PolygonComponent bL
      fillColor [set every repeat] = $[1,1,1]
      pos = (-0.8,0)
      shape = rectangle
      size = (0.1, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent bR
      fillColor [set every repeat] = $[1,1,1]
      pos = (0.8, 0)
      shape = rectangle
      size = (0.1, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent dot
      fillColor = $[1,1,1]
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent mykey
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        speed0 = 0.0001
        speedn = 32
        currentkey = 0
        previouskey = 1
        nkey = 0
        currentx = 0
        lastkeys = []
        xright = 0.7
        xleft = -0.7
        bL.setFillColor([0,1,1], log=None)
        bR.setFillColor([0,1,1], log=None)
      Each Frame:
        if mykey.keys != lastkeys:
           lastkeys = mykey.keys
           nkey = nkey + 1
           if lastkeys[nkey-1] == 'left':
               currentkey = -1
           if lastkeys[nkey-1] == 'right':
               currentkey = 1
           if currentkey != previouskey:
               speedn = currentkey
           if currentkey == previouskey:
               speedn = speedn * 2
           previouskey = currentkey
        currentx = currentx + speedn*speed0;
        dot.setPos((currentx, 0), log=False)
        if ((currentx > xright)):
            continueRoutine = False
            bR.setFillColor([1,0,0], log=None)
        if ((currentx < xleft)):
            continueRoutine = False
            bL.setFillColor([1,0,0], log=None)
      End Routine:
        dot.draw()
        bL.draw()
        bR.draw()
        win.flip()
        core.wait(1.0);
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
